PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = detection_alarme
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent image
      image [set every frame] = $thiscolor
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisduration
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    MouseComponent mouse_resp
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisduration
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  Routine welcome
    TextComponent text_welcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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      text:
        Bienvenue dans la tâche de détection d'alarme.

        - quand l'alarme est orange : regarder l'écran le plus vite possible

        - quand l'alarme est rouge : appuyer sur la gachette gauche le plus vite possible

        Appuyer sur la gachette gauche pour commencer.
    MouseComponent mouse_resp_welcome
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30
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  Routine end
    TextComponent text_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every repeat] = $msg
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        msg = 'dodo'
    MouseComponent mouse_resp_end
      clickable = text_end_quit
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    TextComponent text_end_quit
      letterHeight = 0.05
      pos = (0, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = Click here to quit
      units = pix
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Flow
  Routine welcome
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'thiscolor': 'green.PNG', 'thisduration': 10, 'target': 0, 'corrAns': None},
      {'thiscolor': 'orange.PNG', 'thisduration': 3, 'target': 0, 'corrAns': None},
      {'thiscolor': 'red.PNG', 'thisduration': 3, 'target': 1, 'corrAns': 'n'},
      {'thiscolor': 'green.PNG', 'thisduration': 10, 'target': 0, 'corrAns': None},
      {'thiscolor': 'orange.PNG', 'thisduration': 3, 'target': 0, 'corrAns': None},
      {'thiscolor': 'red.PNG', 'thisduration': 3, 'target': 1, 'corrAns': 'n'}]
    Routine trial
  LoopTerminator trials
  Routine end
